PsychoPy2experiment version="2024.2.4"
Settings
  Audio lib = ptb
  Data filename = u'data/participant_%s_%s_%s' % (expInfo['participant'], expName, expInfo['date'])
  Experiment info = {'participant': '', 'list_no': '["1","2","3"]'}
  Full-screen window = True
  Monitor = testMonitor
  Save log file = False
  Screen = 1
  Units = height
  Window size (pixels) = [2560, 1440]
  expName = ldt-dutch
  keyboardBackend = ioHub
  runMode = 0
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Routines
  Routine welcome
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    ResourceManagerComponent resources
      actionType = Start and Check
      checkAll = False
      forceEndRoutine = False
      resources = ['resources/list1.xlsx', 'resources/list2.xlsx', 'resources/list3.xlsx', 'resources/practice.xlsx']
      startVal [time (s)] = 0
    TextComponent welcomeText
      letterHeight = 0.08
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = norm
      wrapWidth = 1.5
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      text:
        Welkom bij het woordherkenningsexperiment!

        Op het scherm verschijnen straks woorden. Sommige zijn echte Nederlandse woorden en sommige zijn nepwoorden. Het doel is om te bepalen of het getoonde woord echt is of nep.

        Druk op 'j' als het woord echt is.
        Druk op 'f' als het woord nep is.

        We gaan eerst even oefenen.

        Druk op de spatiebalk om verder te gaan.
    KeyboardComponent welcomeKey
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = first key
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  Routine fix
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    CodeComponent intervalCode
      Code Type = Auto->JS
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      Begin Routine:
        interval = (randint(0,700) + 300) / 1000
    TextComponent fix_rand
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $interval
      text [set every repeat] = +
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  Routine primeStim
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    TextComponent primeText
      letterHeight = 0.05
      startVal [time (s)] = 0
      text [set every repeat] = $prime
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    KeyboardComponent primeKey
      allowedKeys [set every repeat] = 'f','j'
      correctAns = $prime_corrAns
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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  Routine feedback
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    CodeComponent feedbackCode
      Code Type = Auto->JS
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      Begin Experiment:
        primed = True
      Begin Routine:
        # Check if the key press was correct or not.
        # This routine will need to follow another routine with a
        # key response component in it called "key_resp"
        # and the "store correct" option enabled.
        # If your experiment is missing that you will
        # not receive feedback and an error message will be displayed.

        # If a key response component has been added and feedback is functioning.
        # 1. remove lines 12, 13, 15, 22 and 23.
        # 2. dedent lines 16 to 21

        fb_text = 'no key_resp component found - look at the Std out window for info'
        fb_col = 'black'

        primed = not primed

        try:
            if primed == False:
                if primeKey.corr:
                    fb_text = 'O'
                    fb_col = 'green'
                else:
                    fb_text = 'X'
                    fb_col = 'red'
            if primed == True:
                if targetKey.corr:
                    fb_text = 'O'
                    fb_col = 'green'
                else:
                    fb_text = 'X'
                    fb_col = 'red'

        except:
            print('Make sure that you have:\n1. a routine with a keyboard component in it called "key_resp"\n 2. In the key_Resp component in the "data" tab select "Store Correct".\n in the "Correct answer" field use "$corrAns" (where corrAns is a column header in your conditions file indicating the correct key press')
    TextComponent feedbackText
      color [set every repeat] = $fb_col
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text [set every repeat] = $fb_text
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  Routine targetStim
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    TextComponent targetText
      letterHeight = 0.05
      startVal [time (s)] = 0
      text [set every repeat] = $target
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    KeyboardComponent targetKey
      allowedKeys [set every repeat] = 'f','j'
      correctAns = $target_corrAns
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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  Routine start
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    TextComponent startText
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = norm
      wrapWidth = 1.8
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      text:
        Goed gedaan!

        We gaan nu verder met het echte experiment. Het experiment is opgedeeld in 8 blokken. Tussen de blokken is er steeds een pauzemoment.

        Veel succes!

        Druk op de spatiebalk om te beginnen
    KeyboardComponent startKey
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = first key
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  Routine pause
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    CodeComponent breakCode
      Code Type = Both
      Begin Experiment:
        def multiples(value, length):
            return [*range(value, length*value+1, value)]

        breakN = 0
        breakOn = multiples(36,8)
      Begin JS Experiment:
        function multiples(value, length) {
            return [...util.range(value, ((length * value) + 1), value)];
        }
        breakN = 0;
        breakOn = multiples(36, 8);
      Begin JS Routine:
        var _pj;
        function _pj_snippets(container) {
            function in_es6(left, right) {
                if (((right instanceof Array) || ((typeof right) === "string"))) {
                    return (right.indexOf(left) > (- 1));
                } else {
                    if (((right instanceof Map) || (right instanceof Set) || (right instanceof WeakMap) || (right instanceof WeakSet))) {
                        return right.has(left);
                    } else {
                        return (left in right);
                    }
                }
            }
            container["in_es6"] = in_es6;
            return container;
        }
        _pj = {};
        _pj_snippets(_pj);
        if (_pj.in_es6((trials.thisN + 1), breakOn.slice(0, (- 1)))) {
            continueRoutine = true;
            breakText.setText("");
            breakN = (breakN + 1);
            text = `Dit was blok ${breakN} van de ${breakOn.length}

            Neem even pauze en druk dan op de spatiebalk om verder te gaan.`;
            breakText.setText(text);
        } else {
            continueRoutine = false;
        }
      Begin Routine:
        if trials.thisN+1 in breakOn[:-1]:
            continueRoutine = True
            breakText.setText("")
            breakN = breakN + 1
            text = 'Dit was blok %s van de %s.\n\n Neem even pauze en druk dan op de spatiebalk om verder te gaan.'%(breakN, len(breakOn))
            breakText.setText(text)
        else:
            continueRoutine = False
    TextComponent breakText
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $text
      units = norm
      wrapWidth = 1.8
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    KeyboardComponent breakKey
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = first key
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  Routine end
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    CodeComponent codeEnd
      Code Type = JS
      Begin JS Routine:
        // Disable downloading results to browser
        psychoJS._saveResults = 0;

        // Generate filename for results
        let filename = "list_" + expInfo["list_no"] + "_participant_" + expInfo["participant"] + "_" + psychoJS._experiment._experimentName + '_' + psychoJS._experiment._datetime;

        // Convert data object to JSON
        let dataJSON = JSON.stringify(psychoJS.experiment._trialsData);

        // Send data to OSF
        fetch("https://pipe.jspsych.org/api/data/", {
              method: "POST",
              headers: {
                "Content-Type": "application/json",
                Accept: "*/*",
              },
              body: JSON.stringify({
                experimentID: "ZEVejS01TpMw",
                filename: `${filename}.json`,
                data: dataJSON,
              }),
        }).then(response => response.json()).then(data => {
            console.log(data);
            quitPsychoJS();
        });
    TextComponent endText
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = norm
      wrapWidth = 1.8
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      text:
        Einde van het experiment.

        Een moment geduld a.u.b.
        De antwoorden worden opgeslagen...
Flow
  Routine welcome
  LoopInitiator practice loopType="TrialHandler"
    conditionsFile = resources/practice.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'type': 'practice', 'prime': 'pippen', 'target': 'kaas', 'prime_cond': 'practice', 'target_cond': 'practice', 'prime_lex': 'nw', 'target_lex': 'w', 'prime_corrAns': 'f', 'target_corrAns': 'j', 'prime_audio': None, 'target_audio': None},
      {'type': 'practice', 'prime': 'beer', 'target': 'demel', 'prime_cond': 'practice', 'target_cond': 'practice', 'prime_lex': 'w', 'target_lex': 'nw', 'prime_corrAns': 'j', 'target_corrAns': 'f', 'prime_audio': None, 'target_audio': None},
      {'type': 'practice', 'prime': 'schulling', 'target': 'mand', 'prime_cond': 'practice', 'target_cond': 'practice', 'prime_lex': 'nw', 'target_lex': 'w', 'prime_corrAns': 'f', 'target_corrAns': 'j', 'prime_audio': None, 'target_audio': None}]
    Routine fix
    Routine primeStim
    Routine feedback
    Routine fix
    Routine targetStim
    Routine feedback
  LoopTerminator practice
  Routine start
  LoopInitiator trials loopType="TrialHandler"
    conditions = []
    conditionsFile = $"resources/list"+ expInfo["list_no"] +".xlsx"
    loopType = random
    nReps = 1
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    Routine fix
    Routine primeStim
    Routine fix
    Routine targetStim
    Routine pause
  LoopTerminator trials
  Routine end
